PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = before_Stroopquestionnaire
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Routines
  Routine trial
    FormComponent before_exp_questionnaire
      Data Format = rows
      Item Padding = 0.05
      Items = before_exp_questionsf.csv
      Pos = (0, 0)
      Randomize = False
      Size = (1.7, 1)
      Text Height = 0.03
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instructions
    TextComponent instructions
      font = Calibri
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Please answer the folowing questions.
        Your answers will be used during data analysis.
        Press "enter" to start the questionnaire.
        Press "enter" once you are done.
    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Instructions
  Routine trial
