PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = stroopexperiment
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Routines
  Routine trial
    TextComponent stroop
      color [set every repeat] = $colour
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
      text [set every repeat] = $word
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    KeyboardComponent response
      allowedKeys = 'r','g','b','y'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine feedback
    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The experiment is now over. Thank you for your participation.

        To find your results, go to the place where the experiment is saved.
        There should be a folder created called "data" where you will be able to find a csv file with your results.

        Press any key to exit this screen.
    KeyboardComponent end_experiment
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine break_2
    TextComponent break_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        You know have a 1 minute break.
        The next block will automatically start after it.

        **To skip this break, press any key.**
    KeyboardComponent end_break
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      store = nothing
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  Routine instructionsText
    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press the key corresponding to the colour of the ink, ignoring the word.

        r = red
        g = green
        b = blue
        y = yellow

        Press space to continue to the next instruction screen.
    KeyboardComponent next_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructionsText2
    TextComponent for_example
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = For example, if you see:
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    TextComponent red
      color = $[1.000,-1.000,-1.000]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = yellow
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    KeyboardComponent begin_experiment
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent press_r
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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      text:
        You should press "r"

        Position your fingers on the r,y,g and b keys
        then press any key to start the experiment.
Flow
  Routine instructionsText
  Routine instructionsText2
  LoopInitiator block_1 loopType="TrialHandler"
    conditionsFile = conditionsStroop.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'red'), ('colour', 'red'), ('corrAns', 'r'), ('congruent', 1.0)]),
      OrderedDict([('word', 'red'), ('colour', 'green'), ('corrAns', 'g'), ('congruent', 0.0)]),
      OrderedDict([('word', 'red'), ('colour', 'blue'), ('corrAns', 'b'), ('congruent', 0.0)]),
      OrderedDict([('word', None), ('colour', None), ('corrAns', None), ('congruent', None)]),
      OrderedDict([('word', 'green'), ('colour', 'green'), ('corrAns', 'g'), ('congruent', 1.0)]),
      OrderedDict([('word', 'green'), ('colour', 'blue'), ('corrAns', 'b'), ('congruent', 0.0)]),
      OrderedDict([('word', 'green'), ('colour', 'yellow'), ('corrAns', 'y'), ('congruent', 0.0)]),
      OrderedDict([('word', 'blue'), ('colour', 'red'), ('corrAns', 'r'), ('congruent', 0.0)]),
      OrderedDict([('word', 'blue'), ('colour', 'green'), ('corrAns', 'g'), ('congruent', 0.0)]),
      OrderedDict([('word', 'blue'), ('colour', 'blue'), ('corrAns', 'b'), ('congruent', 1.0)]),
      OrderedDict([('word', 'blue'), ('colour', 'yellow'), ('corrAns', 'y'), ('congruent', 0.0)]),
      OrderedDict([('word', 'yellow'), ('colour', 'red'), ('corrAns', 'r'), ('congruent', 0.0)]),
      OrderedDict([('word', 'yellow'), ('colour', 'green'), ('corrAns', 'g'), ('congruent', 0.0)]),
      OrderedDict([('word', 'yellow'), ('colour', 'yellow'), ('corrAns', 'y'), ('congruent', 1.0)]),
      OrderedDict([('word', 'red'), ('colour', 'red'), ('corrAns', 'r'), ('congruent', 1.0)]),
      OrderedDict([('word', 'green'), ('colour', 'green'), ('corrAns', 'g'), ('congruent', 1.0)])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
    Routine trial
  LoopTerminator block_1
  Routine break_2
  LoopInitiator block_2 loopType="TrialHandler"
    conditionsFile = conditionsStroop2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'red'), ('colour', 'red'), ('corrAns', 'r'), ('congruent', 1)]),
      OrderedDict([('word', 'red'), ('colour', 'green'), ('corrAns', 'g'), ('congruent', 0)]),
      OrderedDict([('word', 'red'), ('colour', 'yellow'), ('corrAns', 'y'), ('congruent', 0)]),
      OrderedDict([('word', 'green'), ('colour', 'green'), ('corrAns', 'g'), ('congruent', 1)]),
      OrderedDict([('word', 'green'), ('colour', 'blue'), ('corrAns', 'b'), ('congruent', 0)]),
      OrderedDict([('word', 'green'), ('colour', 'yellow'), ('corrAns', 'y'), ('congruent', 0)]),
      OrderedDict([('word', 'red'), ('colour', 'blue'), ('corrAns', 'b'), ('congruent', 0)]),
      OrderedDict([('word', 'blue'), ('colour', 'green'), ('corrAns', 'g'), ('congruent', 0)]),
      OrderedDict([('word', 'blue'), ('colour', 'blue'), ('corrAns', 'b'), ('congruent', 1)]),
      OrderedDict([('word', 'blue'), ('colour', 'yellow'), ('corrAns', 'y'), ('congruent', 0)]),
      OrderedDict([('word', 'yellow'), ('colour', 'red'), ('corrAns', 'r'), ('congruent', 0)]),
      OrderedDict([('word', 'yellow'), ('colour', 'green'), ('corrAns', 'g'), ('congruent', 0)]),
      OrderedDict([('word', 'green'), ('colour', 'red'), ('corrAns', 'r'), ('congruent', 0)]),
      OrderedDict([('word', 'yellow'), ('colour', 'yellow'), ('corrAns', 'y'), ('congruent', 1)]),
      OrderedDict([('word', 'red'), ('colour', 'red'), ('corrAns', 'r'), ('congruent', 1)]),
      OrderedDict([('word', 'green'), ('colour', 'green'), ('corrAns', 'g'), ('congruent', 1)]),
      OrderedDict([('word', 'blue'), ('colour', 'blue'), ('corrAns', 'b'), ('congruent', 1)])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
    Routine trial
  LoopTerminator block_2
  Routine break_2
  LoopInitiator block_3 loopType="TrialHandler"
    conditionsFile = conditionsStroop.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'red'), ('colour', 'red'), ('corrAns', 'r'), ('congruent', 1.0)]),
      OrderedDict([('word', 'red'), ('colour', 'green'), ('corrAns', 'g'), ('congruent', 0.0)]),
      OrderedDict([('word', 'red'), ('colour', 'blue'), ('corrAns', 'b'), ('congruent', 0.0)]),
      OrderedDict([('word', None), ('colour', None), ('corrAns', None), ('congruent', None)]),
      OrderedDict([('word', 'green'), ('colour', 'green'), ('corrAns', 'g'), ('congruent', 1.0)]),
      OrderedDict([('word', 'green'), ('colour', 'blue'), ('corrAns', 'b'), ('congruent', 0.0)]),
      OrderedDict([('word', 'green'), ('colour', 'yellow'), ('corrAns', 'y'), ('congruent', 0.0)]),
      OrderedDict([('word', 'blue'), ('colour', 'red'), ('corrAns', 'r'), ('congruent', 0.0)]),
      OrderedDict([('word', 'blue'), ('colour', 'green'), ('corrAns', 'g'), ('congruent', 0.0)]),
      OrderedDict([('word', 'blue'), ('colour', 'blue'), ('corrAns', 'b'), ('congruent', 1.0)]),
      OrderedDict([('word', 'blue'), ('colour', 'yellow'), ('corrAns', 'y'), ('congruent', 0.0)]),
      OrderedDict([('word', 'yellow'), ('colour', 'red'), ('corrAns', 'r'), ('congruent', 0.0)]),
      OrderedDict([('word', 'yellow'), ('colour', 'green'), ('corrAns', 'g'), ('congruent', 0.0)]),
      OrderedDict([('word', 'yellow'), ('colour', 'yellow'), ('corrAns', 'y'), ('congruent', 1.0)]),
      OrderedDict([('word', 'red'), ('colour', 'red'), ('corrAns', 'r'), ('congruent', 1.0)]),
      OrderedDict([('word', 'green'), ('colour', 'green'), ('corrAns', 'g'), ('congruent', 1.0)])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
    Routine trial
  LoopTerminator block_3
  Routine break_2
  LoopInitiator block_4 loopType="TrialHandler"
    conditionsFile = conditionsStroop2.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine trial
  LoopTerminator block_4
  Routine break_2
  LoopInitiator block_5 loopType="TrialHandler"
    conditionsFile = conditionsStroop.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine trial
  LoopTerminator block_5
  Routine break_2
  LoopInitiator block_6 loopType="TrialHandler"
    conditionsFile = conditionsStroop2.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine trial
  LoopTerminator block_6
  Routine break_2
  LoopInitiator block_7 loopType="TrialHandler"
    conditionsFile = conditionsStroop.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'red'), ('colour', 'red'), ('corrAns', 'r'), ('congruent', 1)]),
      OrderedDict([('word', 'red'), ('colour', 'blue'), ('corrAns', 'b'), ('congruent', 0)]),
      OrderedDict([('word', 'red'), ('colour', 'yellow'), ('corrAns', 'y'), ('congruent', 0)]),
      OrderedDict([('word', 'green'), ('colour', 'red'), ('corrAns', 'r'), ('congruent', 0)]),
      OrderedDict([('word', 'green'), ('colour', 'green'), ('corrAns', 'g'), ('congruent', 1)]),
      OrderedDict([('word', 'green'), ('colour', 'yellow'), ('corrAns', 'y'), ('congruent', 0)]),
      OrderedDict([('word', 'blue'), ('colour', 'red'), ('corrAns', 'r'), ('congruent', 0)]),
      OrderedDict([('word', 'blue'), ('colour', 'green'), ('corrAns', 'g'), ('congruent', 0)]),
      OrderedDict([('word', 'blue'), ('colour', 'blue'), ('corrAns', 'b'), ('congruent', 1)]),
      OrderedDict([('word', 'blue'), ('colour', 'yellow'), ('corrAns', 'y'), ('congruent', 0)]),
      OrderedDict([('word', 'yellow'), ('colour', 'red'), ('corrAns', 'r'), ('congruent', 0)]),
      OrderedDict([('word', 'yellow'), ('colour', 'green'), ('corrAns', 'g'), ('congruent', 0)]),
      OrderedDict([('word', 'yellow'), ('colour', 'blue'), ('corrAns', 'b'), ('congruent', 0)]),
      OrderedDict([('word', 'yellow'), ('colour', 'yellow'), ('corrAns', 'y'), ('congruent', 1)]),
      OrderedDict([('word', 'red'), ('colour', 'red'), ('corrAns', 'r'), ('congruent', 1)]),
      OrderedDict([('word', 'green'), ('colour', 'green'), ('corrAns', 'g'), ('congruent', 1)]),
      OrderedDict([('word', 'blue'), ('colour', 'blue'), ('corrAns', 'b'), ('congruent', 1)])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
    Routine trial
  LoopTerminator block_7
  Routine break_2
  LoopInitiator block_8 loopType="TrialHandler"
    conditionsFile = conditionsStroop2.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine trial
  LoopTerminator block_8
  Routine break_2
  LoopInitiator block_9 loopType="TrialHandler"
    conditionsFile = conditionsStroop.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine trial
  LoopTerminator block_9
  Routine feedback
